OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Downsampling
  New sampling rate (Hz) = 128
  Frequency cutoff ratio = 1/4
  Name of filter = Butterworth
  Filter order = 4
  Pass band ripple (dB) = 0.5
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 5
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
Data=#2 -> Signal display "alpha"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/82104/Desktop/BCI-Music-main/Scripts/soundModel3.py
Input stream=#2 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
